PsychoPy2experiment version="3.0.0alpha3"
Settings
  expName = blockedStroop
  Experiment info = {'participant': '', 'session': '001', 'group': 'A'}
  Full-screen window = True
  Window size (pixels) = [1920, 1080]
  Screen = 1
  Monitor = testMonitor
  color = black
  Units = height
  logging level = debug
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Routines
  Routine trial
    TextComponent stim
      startVal [time (s)] = 0.5
      units = height
      color [set every repeat] = $wordColor
      text [set every repeat] = $word
      letterHeight = 0.15
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    KeyboardComponent resp
      startVal [time (s)] = .5
      allowedKeys = 'left','down','right'
      forceEndRoutine = True
      storeCorrect = True
      correctAns = $corrAns
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  Routine Thanks
    TextComponent thanksText
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      units = height
      text = Thank you for taking part.
      letterHeight = 0.05
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  Routine instructions
    TextComponent instrText
      startVal [time (s)] = 0.0
      units = height
      text [set every repeat] = $Instructions
      letterHeight = 0.05
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    KeyboardComponent finish
      startVal [time (s)] = 0.0
      forceEndRoutine = True
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Flow
  LoopInitiator blocks loopType="TrialHandler"
    nReps = 1
    conditionsFile = $'group' + expInfo['group'] + '.xlsx'
    loopType = sequential
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    Routine instructions
    LoopInitiator trials loopType="TrialHandler"
      nReps = 1
      conditionsFile = $language + '.xlsx'
      loopType = random
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      Routine trial
    LoopTerminator trials
  LoopTerminator blocks
  Routine Thanks
